PsychoPy2experiment version="1.81.03"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = experiment
  Units = use prefs
  Screen = 1
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Routines
  Routine right_target
    ImageComponent target_right
      stopVal [duration (s)] = 0.05
      startVal [time (s)] = 0.0
      image [set every repeat] = $imageTargetPath
      size = [0.5, 0.5]
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  Routine right
    ImageComponent right_base
      stopVal [duration (s)] = 2 + preTargetDuration
      durationEstim = 5
      startVal [time (s)] = 0.0
      image = ../stimuli/neutral.jpg
      size = [0.5, 0.5]
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    TextComponent side_right
      color = black
      text = R
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 1
      letterHeight = 0.1
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    CodeComponent code_3
      Begin Routine:
        targets = ['color', 'size', 'shift', 'shift2']
        index = random.randint(0, 3)

        imageTargetPath = '../stimuli/right' + targets[index] + '.jpg'
  Routine left_feedback
    ImageComponent feedback_left
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image = ../stimuli/neutral_after.jpg
      size = [0.5, 0.5]
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  Routine right_feedback
    ImageComponent feedback_right
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image = ../stimuli/neutral_after.jpg
      size = [0.5, 0.5]
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  Routine left_target
    ImageComponent target_left
      stopVal [duration (s)] = 0.05
      startVal [time (s)] = 0.0
      image [set every repeat] = $imageTargetPath
      size = [0.5, 0.5]
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  Routine left
    ImageComponent left_neutral
      stopVal [time (s)] = 2 + preTargetDuration
      durationEstim = 5
      startVal [time (s)] = 0
      image = ../stimuli/neutral.jpg
      size = [0.5, 0.5]
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    TextComponent side_left
      color = black
      text = L
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 1
      letterHeight = 0.1
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    CodeComponent code_2
      Begin Routine:
        targets = ['color', 'size', 'shift', 'shift2']
        index = random.randint(0, 3)

        imageTargetPath = '../stimuli/left' + targets[index] + '.jpg'
  Routine select
    CodeComponent code
      Begin Routine:
        import random

        repsLeft = 0
        repsRight = 0
        preTargetDuration = random.uniform(0.5, 3)

        if random.randint(0, 1) == 0:
            repsLeft = 1
            repsRight = 0
        else:
            repsLeft = 0
            repsRight = 1
  Routine instructions
    TextComponent welcome_text
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        DOE DINGEN

        EN DOE ZE GOED GVD
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 40
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    Routine select
    LoopInitiator leftBlock loopType="TrialHandler"
      loopType = sequential
      nReps = repsLeft
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      Routine left
      Routine left_target
      Routine left_feedback
    LoopTerminator leftBlock
    LoopInitiator rightBlock loopType="TrialHandler"
      loopType = sequential
      nReps = repsRight
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      Routine right
      Routine right_target
      Routine right_feedback
    LoopTerminator rightBlock
  LoopTerminator trials
